PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  color = $[-1.000,-1.000,-1.000]
  Window size (pixels) = [1920, 1200]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  Save csv file = True
  expName = AEFT170425
  Units = use prefs
  Screen = 1
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Routines
  Routine globinstr
    TextComponent head_globinstr
      text = Melodie als Ganzes!
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.1
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    TextComponent main_globinstr
      wrapWidth = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        Bitte konzentrieren Sie sich nun auf die Melodie als Ganzes!
        Bitte geben Sie so schnell und korrekt wie möglich an, ob die Melodie als Ganzes

        - steigt, indem Sie die Taste  <Pfeil aufwärts> auf der Tastatur drücken,
        - oder fällt, indem Sie die Taste <Pfeil abwärts> drücken.



        Es folgt nun eine kurze Übung!
    TextComponent foot_globinstr
      text = Weiter mit der <Leertaste>!
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      letterHeight = 0.04
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    KeyboardComponent key_read6
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent arrows2
      pos = (0.5, -0.5)
      startVal [time (s)] = 0.0
      image = Paradigms/auditory global local/Bilder/keyboard-arrows.jpg
      size = (0.5, 0.5)
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  Routine feedback_final2
    CodeComponent feedbackmsg_final_2
      Begin Experiment:
        msg='doh!'#if this comes up we forgot to update the msg!
      Begin Routine:
        nCorr = exp_local.data['KeyL.corr'].sum() #.std(), .mean() also available
        meanRt = exp_local.data['KeyL.rt'].mean()
        msg = "3-tone-groups: You got %i trials correct \n (reaction time =%.2f s)" %(nCorr,meanRt)
    TextComponent head_feedback_final_2
      text = Feedback!
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.1
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    TextComponent main_feedback_final_2
      text [set every repeat] = $msg
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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    TextComponent foot_feedback_final_2
      text = Weiter mit der <Leertaste>!
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      letterHeight = 0.04
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    KeyboardComponent key_read_final_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine geninstr
    TextComponent main_geninstr
      wrapWidth = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.065
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      text:
        In diesem Experiment hören Sie eine Reihe von Melodien, die jeweils aus 9 Tönen in Gruppen aus 3 Tönen bestehen.
        Ihre Aufgabe ist es, bei jeder Melodie korrekt und so schnell wie möglich zu entscheiden ob

        - die Melodie als Ganzes (in der globalen Bedingung) oder
        - die Töne der 3-Ton-Gruppierungen (in der lokalen Bedingung)

             steigen oder fallen. Es gibt vier verschiedene Melodieverläufe (siehe Grafik). Das Experimnet besteht aus einem globalen und einem lokalen Block. Zuvor gibt es jeweils ein paar Übungsdurchgänge.
    TextComponent foot_geninstr
      text = Weiter mit der <Leertaste>!
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      letterHeight = 0.04
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    KeyboardComponent key_read1
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent melodiesGL
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      image = Paradigms/auditory global local/Bilder/melodies_white.png
      size = (1.698, 0.438)
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    TextComponent head_geninstr
      text = Herzlich Willkommen!
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine Practise
  Routine feedback_final
    CodeComponent feedbackmsg_final
      Begin Experiment:
        msg='doh!'#if this comes up we forgot to update the msg!
      Begin Routine:
        nCorr = exp_global.data['keyG.corr'].sum() #.std(), .mean() also available
        meanRt = exp_global.data['keyG.rt'].mean()
        msg = "Melody as a whole: You got %i trials correct \n (reaction time=%.2f s)" %(nCorr,meanRt)
    TextComponent head_feedback_final
      text = Feedback!
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.1
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    TextComponent main_feedback_final
      text [set every repeat] = $msg
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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    TextComponent foot_feedback_final
      text = Weiter mit der <Leertaste>!
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      letterHeight = 0.04
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    KeyboardComponent key_read_final
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_practiceL
    TextComponent head_practiceloc
      text = Übung!
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.1
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    TextComponent main_practiceloc
      wrapWidth = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        Konzentrieren Sie sich auf die 3-Ton-Gruppierungen!

        <Pfeil aufwärts> = 3-Ton-Gruppierung steigt in sich,
        <Pfeil abwärts> = 3-Ton-Gruppierung fällt in sich

        Versuchen Sie keine Fehler zu machen und so schnell wie möglich zu reagieren!
    TextComponent foot_practiceloc
      text = Weiter mit der <Leertaste>!
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      letterHeight = 0.04
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    KeyboardComponent key_read3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedbackL
    CodeComponent feedback_L
      Begin Experiment:
        msg='doh!'#if this comes up we forgot to update the msg!
      Begin Routine:
        nCorr = practice_local.data['KeyL.corr'].sum() #.std(), .mean() also available
        meanRt = practice_local.data['KeyL.rt'].mean()
        msg = "Sie haben %i trials richtig beantwortet \n (reaction time=%.2f s)" %(nCorr,meanRt)
    TextComponent head_feedbackL
      text = Übung beendet!
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.1
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    TextComponent main_feedbackL
      text [set every repeat] = $msg
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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    TextComponent foot_feedbackL
      text = Weiter mit der <Leertaste>!
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      letterHeight = 0.04
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    KeyboardComponent key_read4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedbackG
    CodeComponent feedback_G
      Begin Experiment:
        msg='doh!'#if this comes up we forgot to update the msg!
      Begin Routine:
        nCorr = practice_global.data['keyG.corr'].sum() #.std(), .mean() also available
        meanRt = practice_global.data['keyG.rt'].mean()
        msg = "Sie haben %i trials richtig beantwortet \n (reaction time=%.2f s)" %(nCorr,meanRt)
    TextComponent head_feedbackG
      text = Übung beendet!
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.1
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    TextComponent main_feedbackG
      text [set every repeat] = $msg
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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    TextComponent foot_feedbackG
      text = Weiter mit der <Leertaste>!
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      letterHeight = 0.04
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    KeyboardComponent key_read8
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_practiceG
    TextComponent head_practiceglob
      text = Übung!
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.1
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    TextComponent main_practiceglob
      wrapWidth = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        Konzentrieren Sie sich auf die Melodie als Ganzes!

        <Pfeil aufwärts> = Melodie steigt,
        <Pfeil abwärts> = Melodie fällt

        Versuchen Sie keine Fehler zu machen und so schnell wie möglich zu reagieren!
    TextComponent foot_practiceglob
      text = Weiter mit der <Leertaste>!
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      letterHeight = 0.04
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    KeyboardComponent key_read7
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Trails_L
    TextComponent Listen_L
      text = Achtung!
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0
      letterHeight = 0.1
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    SoundComponent local_sound
      sound [set every repeat] = $GL_fileName
      durationEstim = 1.950
      startVal [condition] = 1.0
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    KeyboardComponent KeyL
      correctAns = $corrAns
      storeCorrect = True
      stopVal [condition] = $ISI_L.status==FINISHED
      durationEstim = 4.5
      forceEndRoutine = False
      allowedKeys [set every repeat] = 'up','down'
      startVal [time (s)] = 0
      store = first key
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    StaticComponent ISI_L
      stopVal [duration (s)] = 1.5
      startEstim = 2.950
      startVal [time (s)] = $local_sound.status==FINISHED
  Routine Thank_you
    TextComponent main_thanks
      stopVal [duration (s)] = 15
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Herzlichen Dank für Ihre Teilnahme!

        Der/Die Studienleiter/-in wird Sie jetzt durch die weiteren Bestandteile der Sitzung führen.
  Routine end_question
    TextComponent main_quest
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Sie haben nun beide Bedingungen erfolgreich beendet!

        Es folgen nun noch wenige abschließende Fragen
    TextComponent foot_quest
      text = Weiter mit der <Leertaste>!
      pos = (0, -0.90)
      startVal [time (s)] = 0.0
      letterHeight = 0.04
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    KeyboardComponent key_read10
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine GfLr
    StaticComponent ISI_4
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
    TextComponent text_9
      text = Listen!
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 1.5
      letterHeight = 0.1
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    KeyboardComponent key_resp_9
      storeCorrect = True
      forceEndRoutine = False
      allowedKeys = 'left','right'
      startVal [time (s)] = 2.5
      store = first key
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  Routine Trials_Pause
    TextComponent head_globreal_2
      text = Kurze Pause
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.1
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    TextComponent main_globreal_2
      wrapWidth = 1.5
      text = Drücken Sie die <Leertaste> um das Experiment fortzuführen!
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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    KeyboardComponent key_read9_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine example_stay
    TextComponent example_3
      text = Beispiel
      stopVal [condition] = $sound_1.status==FINISHED
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_2
      wrapWidth = 1.5
      stopVal [condition] = $sound_1.status==FINISHED
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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    SoundComponent sound_2
      sound [set every repeat] = $GL_fileName
      durationEstim = 1950
      startVal [time (s)] = 5
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    TextComponent text_3
      text = Weiter mit der <Leertaste>
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine question4
    TextComponent main_question4
      wrapWidth = 1.5
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        Manchmal waren Melodien im Experiment inkongruent, d.h. die Melodie steigt auf der 9-Ton-Ebene aber die 3 Ton-Gruppen fallen, oder umgekehrt.
        Fanden Sie es grundsätzlich schwieriger, sich auf die Melodie als Ganzes (=0), oder die 3-Ton-Melodien (=1) zu konzentrieren?
        (Mitte= beide Bedingungen waren für mich gleich schwierig)
    RatingScaleComponent rating4
      pos = 0, -0.2
      startVal [time (s)] = 0.0
      size = 1
      storeRatingTime = False
      forceEndRoutine = True
      visualAnalogScale = True
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    KeyboardComponent key_finish4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Isi
    StaticComponent ISI
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
  Routine question1
    TextComponent main_question1
      wrapWidth = 1.5
      text = Wie schwierig fanden Sie das Experiment grundsätzlich? (0 = sehr einfach; 1= sehr schwierig)
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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    RatingScaleComponent rating1
      pos = 0, -0.2
      startVal [time (s)] = 0.0
      size = 1
      storeRatingTime = False
      forceEndRoutine = True
      visualAnalogScale = True
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    KeyboardComponent key_finish1
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine question3
    TextComponent main_question3
      wrapWidth = 1.5
      text = Wie schwierig fanden Sie es, sich auf die 3-Ton-Gruppierungen zu konzentrieren? (0 = sehr einfach; 1= sehr schwierig)
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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    RatingScaleComponent rating3
      pos = 0, -0.2
      startVal [time (s)] = 0.0
      size = 1
      storeRatingTime = False
      forceEndRoutine = True
      visualAnalogScale = True
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    KeyboardComponent key_finish3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine question2
    TextComponent main_question2
      wrapWidth = 1.5
      text = Wie schwierig fanden Sie es, sich auf die Melodie als Ganzes zu konzentrieren? (0 = sehr einfach; 1= sehr schwierig)
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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    RatingScaleComponent rating2
      pos = 0, -0.2
      startVal [time (s)] = 0.0
      size = 1
      storeRatingTime = False
      forceEndRoutine = True
      visualAnalogScale = True
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    KeyboardComponent key_finish2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Trials_G
    TextComponent Listen_G
      text = Achtung!
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0
      letterHeight = 0.1
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    StaticComponent ISI_G
      stopVal [duration (s)] = 1.5
      startEstim = 2.950
      startVal [time (s)] = $sound_global.status==FINISHED
    SoundComponent sound_global
      sound [set every repeat] = $GL_fileName
      durationEstim = 1.950
      startVal [time (s)] = 1.0
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    KeyboardComponent keyG
      correctAns = $corrAns
      storeCorrect = True
      stopVal [condition] = $ISI_G.status==FINISHED
      durationEstim = 3.450
      forceEndRoutine = False
      allowedKeys [set every repeat] = 'up','down'
      startVal [time (s)] = 0
      store = first key
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  Routine GfLf
    StaticComponent ISI_3
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
    TextComponent text_8
      text = Listen!
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 1.5
      letterHeight = 0.1
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    KeyboardComponent key_resp_8
      storeCorrect = True
      forceEndRoutine = False
      allowedKeys = 'left','right'
      startVal [time (s)] = 2.5
      store = first key
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  Routine instr_realL
    TextComponent head_locreal
      text = Beginn des Experiments
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.1
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    TextComponent main_locreal
      wrapWidth = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        Sie sind nun gut vorbereitet, um mit dem Experiment zu beginnen! Wenn etwas unklar ist, fragen Sie bitte jetzt den/die Versuchsleiter/-in.

        Bitte versuchen Sie so schnell und korrekt wie möglich zu antworten!

        Achten Sie auf die 3-Ton-Gruppierungen!

        <Pfeil aufwärts> = 3-Ton-Gruppen steigen in sich
        <Pfeil abwärts> = 3-Ton-Gruppen fallen in sich.
    TextComponent foot_locreal
      text = Drücken Sie die <Leertaste> um mit dem Experiment zu beginnen!
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      letterHeight = 0.04
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    KeyboardComponent key_read5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine example_2
    TextComponent example
      text = Beispiel
      stopVal [condition] = $sound_1.status==FINISHED
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent textloop
      wrapWidth = 1.5
      text [set every repeat] = $text
      stopVal [condition] = $sound_1.status==FINISHED
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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    SoundComponent sound_1
      sound [set every repeat] = $GL_fileName
      durationEstim = 1950
      startVal [time (s)] = 5
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    ImageComponent image
      stopVal [condition] = $sound_1.status==FINISHED
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      image [set every repeat] = $bild
      size = (0.454, 0.432)
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  Routine instr_realG
    TextComponent head_globreal
      text = Beginn des Experiments
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.1
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    TextComponent main_globreal
      wrapWidth = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        Sie sind nun gut vorbereitet, um mit dem Experiment zu beginnen! Wenn etwas unklar ist, fragen Sie bitte jetzt den/die Versuchsleiter/-in.

        Bitte versuchen Sie so schnell und korrekt wie möglich zu antworten!

        Achten Sie auf die Melodie als Ganzes!

        Pfeil aufwärts = Melodie als Ganzes steigt
        Pfeil abwärts = Melodie als Ganzes fällt.
    TextComponent foot_globreal
      text = Drücken Sie die <Leertaste> um mit dem Experiment zu beginnen!
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      letterHeight = 0.04
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    KeyboardComponent key_read9
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine locinstr
    TextComponent head_locinstr
      text = 3-Ton-Gruppen
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.1
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    TextComponent main_locinstr
      wrapWidth = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text [set every frame]:
        Bitte konzentrieren Sie sich nun auf die 3-Ton-Gruppierungen der Melodien!
        Bitte geben Sie so schnell und korrekt wie möglich an, ob die 3-Ton-Gruppierungen in sich

        - steigen, indem Sie die Taste  <Pfeil aufwärts> auf der Tastatur drücken,
        - oder fallen, indem Sie die Taste <Pfeil abwärts> drücken.
        Drücken Sie die Taste so schnell wie möglich, d.h. sobald Sie sich sicher sind. SIe brauchen nicht warten, bis die Melodie zu Ende gespielt ist.



        Es folgt nun eine kurze Übung!
    TextComponent foot_locinstr
      text = Weiter mit der <Leertaste>!
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      letterHeight = 0.04
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    KeyboardComponent key_read2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent arrows
      pos = (0.5, -0.5)
      startVal [time (s)] = 0.0
      image = Paradigms/auditory global local/Bilder/keyboard-arrows.jpg
      size = (0.5, 0.5)
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  Routine trials
    StaticComponent ISI_2
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
    TextComponent text_7
      text = Listen!
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 1.5
      letterHeight = 0.1
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    KeyboardComponent key_resp_7
      storeCorrect = True
      forceEndRoutine = False
      allowedKeys = 'left','right'
      startVal [time (s)] = 2.5
      store = first key
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  Routine Trials_G_2
Flow
  Routine geninstr
  LoopInitiator examples loopType="TrialHandler"
    conditionsFile = Paradigms/auditory global local/examples.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [{'GL_fileName': u'../../Paradigms/auditory global local/Melodies/C_ff.wav', 'congruent': 1, 'scale': u'c', 'corrAns': u'down', 'octave': 1, 'text': u'1. Diese Melodie faellt sowohl auf globaler (ganze Melodie) als auch auf lokaler Ebene (3-Ton-Gruppen) (kongruent).', 'bild': u'../../Paradigms/auditory global local/Bilder/ff.png', 'condition': u'GfLf'},
      {'GL_fileName': u'../../Paradigms/auditory global local/Melodies/C_fr.wav', 'congruent': 0, 'scale': u'c', 'corrAns': u'up', 'octave': 1, 'text': u'2. Diese Melodie faellt auf globaler Ebene, jedoch steigen die 3-Ton-Gruppen in sich (inkongruent).', 'bild': u'../../Paradigms/auditory global local/Bilder/fr.png', 'condition': u'GfLr'},
      {'GL_fileName': u'../../Paradigms/auditory global local/Melodies/C_rf.wav', 'congruent': 0, 'scale': u'c', 'corrAns': u'down', 'octave': 1, 'text': u'3. Diese Melodie steigt auf globaler Ebene, aber faellt auf Ebene der 3-Ton-Gruppen (inkongruent).', 'bild': u'../../Paradigms/auditory global local/Bilder/rf.png', 'condition': u'GrLf'},
      {'GL_fileName': u'../../Paradigms/auditory global local/Melodies/C_rr.wav', 'congruent': 1, 'scale': u'c', 'corrAns': u'up', 'octave': 1, 'text': u'4. Diese Melodie steigt auf beiden Ebenen (kongruent).', 'bild': u'../../Paradigms/auditory global local/Bilder/rr.png', 'condition': u'GrLr'}]
    Routine example_2
  LoopTerminator examples
  LoopInitiator local_Block loopType="TrialHandler"
    loopType = sequential
    nReps = 1
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    Routine locinstr
    Routine instr_practiceL
    Routine Isi
    LoopInitiator practice_local loopType="TrialHandler"
      conditionsFile = Paradigms/auditory global local/conditions_local_train.csv
      loopType = random
      nReps = 1
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      conditions:
        [{'scale': u'c#', 'GL_fileName': u'../../Paradigms/auditory global local/Melodies/D#_ff.wav', 'congruent': 1, 'trigger': 5, 'corrAns': u'down', 'octave': 1, 'condition': u'GfLf'},
        {'scale': u'c#', 'GL_fileName': u'../../Paradigms/auditory global local/Melodies/D#_fr.wav', 'congruent': 0, 'trigger': 6, 'corrAns': u'up', 'octave': 1, 'condition': u'GfLr'},
        {'scale': u'c#', 'GL_fileName': u'../../Paradigms/auditory global local/Melodies/D#_rf.wav', 'congruent': 0, 'trigger': 7, 'corrAns': u'down', 'octave': 1, 'condition': u'GrLf'},
        {'scale': u'c#', 'GL_fileName': u'../../Paradigms/auditory global local/Melodies/D#_rr.wav', 'congruent': 1, 'trigger': 8, 'corrAns': u'up', 'octave': 1, 'condition': u'GrLr'},
        {'scale': u'a', 'GL_fileName': u'../../Paradigms/auditory global local/Melodies/A_ff.wav', 'congruent': 1, 'trigger': 37, 'corrAns': u'down', 'octave': 0, 'condition': u'GfLf'},
        {'scale': u'a', 'GL_fileName': u'../../Paradigms/auditory global local/Melodies/A_fr.wav', 'congruent': 0, 'trigger': 38, 'corrAns': u'up', 'octave': 0, 'condition': u'GfLr'},
        {'scale': u'a', 'GL_fileName': u'../../Paradigms/auditory global local/Melodies/A_rf.wav', 'congruent': 0, 'trigger': 39, 'corrAns': u'down', 'octave': 0, 'condition': u'GrLf'},
        {'scale': u'a', 'GL_fileName': u'../../Paradigms/auditory global local/Melodies/A_rr.wav', 'congruent': 1, 'trigger': 40, 'corrAns': u'up', 'octave': 0, 'condition': u'GrLr'}]
      Routine Trails_L
    LoopTerminator practice_local
    Routine feedbackL
    Routine instr_realL
    Routine Isi
    LoopInitiator batch_local loopType="TrialHandler"
      loopType = random
      nReps = 2
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      LoopInitiator exp_local loopType="TrialHandler"
        conditionsFile = Paradigms/auditory global local/conditions_local_test.csv
        loopType = random
        nReps = 1
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        conditions:
          [{'scale': u'c', 'GL_fileName': u'../../Paradigms/auditory global local/Melodies/C_ff.wav', 'congruent': 1, 'trigger': 1, 'corrAns': u'down', 'octave': 1, 'condition': u'GfLf'},
          {'scale': u'c', 'GL_fileName': u'../../Paradigms/auditory global local/Melodies/C_fr.wav', 'congruent': 0, 'trigger': 2, 'corrAns': u'up', 'octave': 1, 'condition': u'GfLr'},
          {'scale': u'c', 'GL_fileName': u'../../Paradigms/auditory global local/Melodies/C_rf.wav', 'congruent': 0, 'trigger': 3, 'corrAns': u'down', 'octave': 1, 'condition': u'GrLf'},
          {'scale': u'c', 'GL_fileName': u'../../Paradigms/auditory global local/Melodies/C_rr.wav', 'congruent': 1, 'trigger': 4, 'corrAns': u'up', 'octave': 1, 'condition': u'GrLr'},
          {'scale': u'd', 'GL_fileName': u'../../Paradigms/auditory global local/Melodies/D_ff.wav', 'congruent': 1, 'trigger': 9, 'corrAns': u'down', 'octave': 1, 'condition': u'GfLf'},
          {'scale': u'd', 'GL_fileName': u'../../Paradigms/auditory global local/Melodies/D_fr.wav', 'congruent': 0, 'trigger': 10, 'corrAns': u'up', 'octave': 1, 'condition': u'GfLr'},
          {'scale': u'd', 'GL_fileName': u'../../Paradigms/auditory global local/Melodies/D_rf.wav', 'congruent': 0, 'trigger': 11, 'corrAns': u'down', 'octave': 1, 'condition': u'GrLf'},
          {'scale': u'd', 'GL_fileName': u'../../Paradigms/auditory global local/Melodies/D_rr.wav', 'congruent': 1, 'trigger': 12, 'corrAns': u'up', 'octave': 1, 'condition': u'GrLr'}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
        Routine Trails_L
      LoopTerminator exp_local
      Routine Trials_Pause
    LoopTerminator batch_local
  LoopTerminator local_Block
  LoopInitiator global_block loopType="TrialHandler"
    loopType = sequential
    nReps = 1
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    Routine globinstr
    Routine instr_practiceG
    Routine Isi
    LoopInitiator practice_global loopType="TrialHandler"
      conditionsFile = Paradigms/auditory global local/conditions_global_train.csv
      loopType = random
      nReps = 1
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      conditions:
        [{'scale': u'c#', 'GL_fileName': u'../../Paradigms/auditory global local/Melodies/D#_ff.wav', 'congruent': 1, 'trigger': None, 'corrAns': u'down', 'octave': 1, 'condition': u'GfLf'},
        {'scale': u'c#', 'GL_fileName': u'../../Paradigms/auditory global local/Melodies/D#_fr.wav', 'congruent': 0, 'trigger': 206.0, 'corrAns': u'down', 'octave': 1, 'condition': u'GfLr'},
        {'scale': u'c#', 'GL_fileName': u'../../Paradigms/auditory global local/Melodies/D#_rf.wav', 'congruent': 0, 'trigger': None, 'corrAns': u'up', 'octave': 1, 'condition': u'GrLf'},
        {'scale': u'c#', 'GL_fileName': u'../../Paradigms/auditory global local/Melodies/D#_rr.wav', 'congruent': 1, 'trigger': None, 'corrAns': u'up', 'octave': 1, 'condition': u'GrLr'},
        {'scale': u'a', 'GL_fileName': u'../../Paradigms/auditory global local/Melodies/A_ff.wav', 'congruent': 1, 'trigger': None, 'corrAns': u'down', 'octave': 0, 'condition': u'GfLf'},
        {'scale': u'a', 'GL_fileName': u'../../Paradigms/auditory global local/Melodies/A_fr.wav', 'congruent': 0, 'trigger': None, 'corrAns': u'down', 'octave': 0, 'condition': u'GfLr'},
        {'scale': u'a', 'GL_fileName': u'../../Paradigms/auditory global local/Melodies/A_rf.wav', 'congruent': 0, 'trigger': None, 'corrAns': u'up', 'octave': 0, 'condition': u'GrLf'},
        {'scale': u'a', 'GL_fileName': u'../../Paradigms/auditory global local/Melodies/A_rr.wav', 'congruent': 1, 'trigger': None, 'corrAns': u'up', 'octave': 0, 'condition': u'GrLr'}]
      Routine Trials_G
    LoopTerminator practice_global
    Routine feedbackG
    Routine instr_realG
    Routine Isi
    LoopInitiator batch_global loopType="TrialHandler"
      loopType = random
      nReps = 2
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      LoopInitiator exp_global loopType="TrialHandler"
        conditionsFile = Paradigms/auditory global local/conditions_global_test.csv
        loopType = random
        nReps = 1
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        conditions:
          [{'scale': u'c', 'GL_fileName': u'../../Paradigms/auditory global local/Melodies/C_ff.wav', 'congruent': 1, 'trigger': 205.0, 'corrAns': u'down', 'octave': 1, 'condition': u'GfLf'},
          {'scale': u'c', 'GL_fileName': u'../../Paradigms/auditory global local/Melodies/C_fr.wav', 'congruent': 0, 'trigger': None, 'corrAns': u'down', 'octave': 1, 'condition': u'GfLr'},
          {'scale': u'c', 'GL_fileName': u'../../Paradigms/auditory global local/Melodies/C_rf.wav', 'congruent': 0, 'trigger': None, 'corrAns': u'up', 'octave': 1, 'condition': u'GrLf'},
          {'scale': u'c', 'GL_fileName': u'../../Paradigms/auditory global local/Melodies/C_rr.wav', 'congruent': 1, 'trigger': None, 'corrAns': u'up', 'octave': 1, 'condition': u'GrLr'},
          {'scale': u'd', 'GL_fileName': u'../../Paradigms/auditory global local/Melodies/D_ff.wav', 'congruent': 1, 'trigger': None, 'corrAns': u'down', 'octave': 1, 'condition': u'GfLf'},
          {'scale': u'd', 'GL_fileName': u'../../Paradigms/auditory global local/Melodies/D_fr.wav', 'congruent': 0, 'trigger': None, 'corrAns': u'down', 'octave': 1, 'condition': u'GfLr'},
          {'scale': u'd', 'GL_fileName': u'../../Paradigms/auditory global local/Melodies/D_rf.wav', 'congruent': 0, 'trigger': 207.0, 'corrAns': u'up', 'octave': 1, 'condition': u'GrLf'},
          {'scale': u'd', 'GL_fileName': u'../../Paradigms/auditory global local/Melodies/D_rr.wav', 'congruent': 1, 'trigger': None, 'corrAns': u'up', 'octave': 1, 'condition': u'GrLr'}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
        Routine Trials_G
      LoopTerminator exp_global
      Routine Trials_Pause
    LoopTerminator batch_global
  LoopTerminator global_block
  Routine end_question
  Routine question1
  Routine question2
  Routine question3
  Routine question4
  Routine feedback_final
  Routine feedback_final2
  Routine Thank_you
