PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  color = $[-1.000,-1.000,-1.000]
  Window size (pixels) = [1920, 1200]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  Save csv file = True
  expName = Navon170228ohnemask
  Units = use prefs
  Screen = 1
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Routines
  Routine pause_G
    TextComponent head_feedbackG
      text = Kurze Pause!
      pos = (0, 0.85)
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.1
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    TextComponent main_feedbackG
      text [set every repeat] = Drücken Sie <Leertaste> wenn Sie bereit sind, den Test fortzuführen.
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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    KeyboardComponent key_read8
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine globinstr
    TextComponent head_globinstr
      wrapWidth = 1.5
      text = Übergeordnete (globale) Form des Buchstaben!
      pos = (0, 0.85)
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.1
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    TextComponent main_globinstr
      wrapWidth = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.060
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      text:
        Bitte reagieren Sie in der folgenden Aufgabe auf die übergeordnete, d.h. globale Form der Buchstaben, also den Buchstaben, welche aus den kleinen Elementen gebildet wird. Dieser große Buchstabe kann entweder entweder H oder S sein. Bitte drücken Sie so schnell es geht die entsprechende Taste auf der Tastatur (H oder S).

        Beispiel:








        linkes Beispiel: H drücken                                   rechtes Beispiel: S drücken

        Die Stimuli werden nur für eine kurze Zeit präsentiert. Bitte versuchen Sie so schnell es geht zu antworten, jedoch möglichst wenig Fehler zu machen.

        Es folgt nun eine kurze Übung!
    TextComponent foot_globinstr
      text = Weiter mit der <Leertaste>!
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      letterHeight = 0.04
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    KeyboardComponent key_read6
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent Hglo
      pos = (-0.4,0)
      startVal [time (s)] = 0.0
      image = Grafiken/HH.png
      size = (0.194,0.300)
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    ImageComponent Sglo
      pos = (0.4, 0)
      startVal [time (s)] = 0.0
      image = Grafiken/SH.png
      size = (0.194, 0.300)
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  Routine pause_L
    TextComponent head_feedbackL
      text = Kurze Pause!
      pos = (0, 0.85)
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.1
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    TextComponent main_feedbackL
      text [set every repeat] = Drücken Sie <Leertaste> wenn Sie bereit sind, den Test fortzuführen.
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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    KeyboardComponent key_read4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback_final2
    CodeComponent feedbackmsg_final_2
      Begin Experiment:
        msg='doh!'#if this comes up we forgot to update the msg!
      Begin Routine:
        nCorr = exp_local.data['KeyL.corr'].sum() #.std(), .mean() also available
        meanRt = exp_local.data['KeyL.rt'].mean()
        msg = "Lokale Buchstaben (Elemente): Sie haben %i Stimuli richtig beantwortet \n (Reaktionszeit=%.2f s)" %(nCorr,meanRt)
    TextComponent head_feedback_final_2
      text = Feedback!
      pos = (0, 0.85)
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.1
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    TextComponent main_feedback_final_2
      text [set every repeat] = $msg
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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    TextComponent foot_feedback_final_2
      text = Weiter mit der <Leertaste>!
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      letterHeight = 0.04
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    KeyboardComponent key_read_final_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedbackG_train
    CodeComponent feedback_G_2
      Begin Experiment:
        msg='doh!'#if this comes up we forgot to update the msg!
      Begin Routine:
        nCorr = practice_global.data['KeyG.corr'].sum() #.std(), .mean() also available
        meanRt = practice_global.data['KeyG.rt'].mean()
        msg = "Sie haben %i Stimuli richtig beantwortet \n (Reaktionszeit=%.2f s)" %(nCorr,meanRt)
    TextComponent head_feedbackG_2
      text = Übung beendet!
      pos = (0, 0.85)
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.1
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    TextComponent main_feedbackG_2
      text [set every repeat] = $msg
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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    TextComponent foot_feedbackG_2
      text = Weiter mit der <Leertaste>!
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      letterHeight = 0.04
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    KeyboardComponent key_read8_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine geninstr
    TextComponent head_geninstr
      text = Herzlich Willkommen!
      pos = (0, 0.85)
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.1
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    TextComponent main_geninstr
      wrapWidth = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        Bei dieser Aufgabe sehen Sie Buchstaben, die selbst aus Buchstaben aufgebaut sind.







        Die Buchstaben (z.B. H) können aus dem selben Buchstaben (z.B. H) oder einem anderen (z.B. ein großes S aus kleinen H) bestehen.

        In einer Bedingung werden Sie aufgefordert, die übergeordnete, globale Form des Buchstabens zu identifizieren;
        in einem anderen Durchgang werden Sie gefragt, die individuellen Buchstaben Elemente auf lokaler Ebene zu identifizieren.
    TextComponent foot_geninstr
      text = Weiter mit der <Leertaste>!
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      letterHeight = 0.04
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    KeyboardComponent key_read1
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent Instr_HH
      pos = (-0.4, 0.3)
      startVal [time (s)] = 0.0
      image = Grafiken/HH.png
      size = (0.194, 0.300)
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    ImageComponent Instr_SH
      pos = (0.4, 0.3)
      startVal [time (s)] = 0.0
      image = Grafiken/SH.png
      size = (0.194,0.300)
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  Routine Practise
  Routine feedback_final
    CodeComponent feedbackmsg_final
      Begin Experiment:
        msg='doh!'#if this comes up we forgot to update the msg!
      Begin Routine:
        nCorr = exp_global.data['KeyG.corr'].sum() #.std(), .mean() also available
        meanRt = exp_global.data['KeyG.rt'].mean()
        msg = "Globaler Buchstabe: Sie haben %i Stimuli richtig beantwortet \n (Reaktionszeit=%.2f s)" %(nCorr,meanRt)
    TextComponent head_feedback_final
      text = Feedback!
      pos = (0, 0.85)
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.1
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    TextComponent main_feedback_final
      text [set every repeat] = $msg
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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    TextComponent foot_feedback_final
      text = Weiter mit der <Leertaste>!
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      letterHeight = 0.04
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    KeyboardComponent key_read_final
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_practiceL
    TextComponent head_practiceloc
      text = Übung!
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.1
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    TextComponent main_practiceloc
      wrapWidth = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        Focus on 3-tone-groups!

        up arrow = rising
        down arrow = falling

        Be FAST and ACCURATE!
    TextComponent foot_practiceloc
      text = Press <space> to continue!
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      letterHeight = 0.04
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    KeyboardComponent key_read3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trials
    StaticComponent ISI_2
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
    TextComponent text_7
      text = Listen!
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 1.5
      letterHeight = 0.1
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    KeyboardComponent key_resp_7
      storeCorrect = True
      forceEndRoutine = False
      allowedKeys = 'left','right'
      startVal [time (s)] = 2.5
      store = first key
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  Routine instr_practiceG
    TextComponent head_practiceglob
      text = Exercise!
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.1
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    TextComponent main_practiceglob
      wrapWidth = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        Focus on the melody as a whole!

        up arrow= rising
        down arrow = falling

        Be FAST and ACCURATE!
    TextComponent foot_practiceglob
      text = Press <space> to continue!
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      letterHeight = 0.04
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    KeyboardComponent key_read7
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Thank_you
    TextComponent main_thanks
      stopVal [duration (s)] = 15
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Herzlichen Dank für Ihre Teilnahme!

        Der/Die Studienleiter/-in wird Sie jetzt durch die weiteren Bestandteile der Sitzung führen.
  Routine end_question
    TextComponent main_quest
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Sie haben nun beide Varianten der Aufgabe erfolgreich beendet!

        Wir würden Sie nun bitten, uns noch ein paar letzte Fragen zu beantworten!
    TextComponent foot_quest
      text = Weiter mit der <Leertaste>!
      pos = (0, -0.90)
      startVal [time (s)] = 0.0
      letterHeight = 0.04
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    KeyboardComponent key_read10
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine geninstr_2
    TextComponent head_geninstr_2
      text = Ablauf
      pos = (0, 0.85)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent main_geninstr2
      wrapWidth = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        1. Fokussieren Sie das Fixationskreuz in der Mitte des Bildschirms.
        2. Ein Warnton bereitet Sie vor-
        3. Der Buchstabe erscheint zufällig in einem der vier Quadranten des Bildschirms für eine kurze Zeit.
        4. Daraufhin wird dieser von einer Maske bedeckt.
        5. Drücken Sie so schnell es geht die Taste "S" oder "H" , abhängig von der Aufgabenstellung. Sie werden je nach Task entweder auf die übergeordnete Form des Buchstabens, oder auf dessen Elemente reagieren sollen.
        6. Nach einer kurzen Pause startet der nächste Trial automatisch.

        Um Ihre Reaktionszeiten zu optimieren, legen Sie bitte Ihre beiden Zeigefinger bereits vor den Trials auf die Tasten "S" und "H".  Nun folgt zunächst die Instruktion für die erste der zwei Aufgaben.
    TextComponent text
      text = Weiter mit der <Leertaste>!
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      letterHeight = 0.04
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    KeyboardComponent key_readinstr_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine GfLr
    StaticComponent ISI_4
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
    TextComponent text_9
      text = Listen!
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 1.5
      letterHeight = 0.1
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    KeyboardComponent key_resp_9
      storeCorrect = True
      forceEndRoutine = False
      allowedKeys = 'left','right'
      startVal [time (s)] = 2.5
      store = first key
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  Routine question4
    TextComponent main_question4
      wrapWidth = 1.5
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        Manchmal waren die Buchstaben im Experiment inkongruent, d.h. die der Buchstabe auf globaler Ebene war nicht der selbe wie auf lokaler Ebene.
        Fanden Sie es grundsätzlich schwieriger, sich auf den übergeordneten Buchstaben (=0), oder die elementaren Buchstaben auf lokaler Ebene (=1) zu konzentrieren?
        (Mitte= beide Bedingungen waren für mich gleich schwierig)
    RatingScaleComponent rating4
      pos = 0, -0.3
      startVal [time (s)] = 0.0
      size = 1
      storeRatingTime = False
      forceEndRoutine = True
      visualAnalogScale = True
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    KeyboardComponent key_finish4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Trials_L
    TextComponent Fixation_L
      text = +
      stopVal [duration (s)] = 0.500
      startVal [time (s)] = 2.0
      letterHeight = 0.2
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    SoundComponent local_sound
      sound [set every repeat] = Grafiken/Signal.wav
      stopVal [duration (s)] = 0.075
      startVal [time (s)] = 2
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    KeyboardComponent KeyL
      correctAns = $corrAns
      storeCorrect = True
      stopVal [duration (s)] = 2
      forceEndRoutine = True
      allowedKeys [set every repeat] = 'h','s'
      startVal [time (s)] = 2.5
      store = first key
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    StaticComponent ISI_L
      stopVal [time (s)] = 2
      startVal [time (s)] = 0
    ImageComponent local_stim
      stopVal [duration (s)] = 0.100
      pos [set during: Trials_L.ISI_L] = position
      units = deg
      startVal [time (s)] = 2.5
      image [set during: Trials_L.ISI_L] = $GL_fileName
      size = 4.67
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    ImageComponent maske
      stopVal [duration (s)] = 1.9
      pos [set during: Trials_L.ISI_L] = position
      units = deg
      startVal [time (s)] = 2.6
      image [set during: Trials_L.ISI_L] = Grafiken/Mask.png
      size = 4.67
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  Routine question1
    TextComponent main_question1
      wrapWidth = 1.5
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        Wie schwierig fanden Sie das Experiment grundsätzlich?
        (0 = sehr einfach; 1= sehr schwierig)
    RatingScaleComponent rating1
      pos = 0, -0.3
      startVal [time (s)] = 0.0
      size = 1
      storeRatingTime = False
      forceEndRoutine = True
      visualAnalogScale = True
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    KeyboardComponent key_finish1
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine question3
    TextComponent main_question3
      wrapWidth = 1.5
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        Wie schwierig fanden Sie es, sich auf die elementaren Buchstaben auf lokaler Ebene zu konzentrieren?
        (0 = sehr einfach; 1= sehr schwierig)
    RatingScaleComponent rating3
      pos = 0, -0.3
      startVal [time (s)] = 0.0
      size = 1
      storeRatingTime = False
      forceEndRoutine = True
      visualAnalogScale = True
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    KeyboardComponent key_finish3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine question2
    TextComponent main_question2
      wrapWidth = 1.5
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        Wie schwierig fanden Sie es, sich auf die übergeordneten Buchstaben zu konzentrieren?
        (0 = sehr einfach; 1= sehr schwierig)
    RatingScaleComponent rating2
      pos = 0, -0.3
      startVal [time (s)] = 0.0
      size = 1
      storeRatingTime = False
      forceEndRoutine = True
      visualAnalogScale = True
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    KeyboardComponent key_finish2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Trials_G
    TextComponent Fixation_G
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 2.0
      letterHeight = 0.2
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    SoundComponent global_sound
      sound [set every repeat] = Grafiken/Signal.wav
      stopVal [duration (s)] = 0.075
      startVal [time (s)] = 2
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    KeyboardComponent KeyG
      correctAns = $corrAns
      storeCorrect = True
      stopVal [duration (s)] = 2
      forceEndRoutine = True
      allowedKeys [set every repeat] = 'h','s'
      startVal [time (s)] = 2.5
      store = first key
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    StaticComponent ISI_L_2
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0
    ImageComponent global_stim
      stopVal [duration (s)] = 0.100
      pos [set during: Trials_G.ISI_L_2] = position
      units = deg
      startVal [time (s)] = 2.500
      image [set during: Trials_G.ISI_L_2] = $GL_fileName
      size = 4.67
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    ImageComponent maske_g
      stopVal [duration (s)] = 1.9
      pos [set during: Trials_G.ISI_L_2] = position
      units = deg
      startVal [time (s)] = 2.6
      image [set during: Trials_G.ISI_L_2] = Grafiken/Mask.png
      size = 4.67
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  Routine instr_realL
    TextComponent head_locreal
      text = Beginn des Experiments 
      pos = (0, 0.85)
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.1
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    TextComponent main_locreal
      wrapWidth = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        Sie sind nun bereit für das Experiment! Bitte fragen Sie jetzt den/die VersuchsleiterIn wenn etwas unklar ist.

        Bitte versuchen Sie so schnell wie möglich zu reagieren und möglichst wenig Fehler zu machen!

        Legen Sie bitte nun bereits Ihre Zeigefinger auf die Tasten <H> und <S>!
    TextComponent foot_locreal
      text = Drücken Sie die <Leertaste> um mit dem Experiment zu beginnen!
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      letterHeight = 0.04
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    KeyboardComponent key_read5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_realG
    TextComponent head_globreal
      text = Beginn des Experiments
      pos = (0, 0.85)
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.1
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    TextComponent main_globreal
      wrapWidth = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        Sie sind nun bereit für das Experiment! Bitte fragen Sie jetzt den/die VersuchsleiterIn wenn etwas unklar ist.

        Bitte versuchen Sie so schnell wie möglich zu reagieren und möglichst wenig Fehler zu machen!

        Legen Sie bitte nun bereits Ihre Zeigefinger auf die Tasten <H> und <S>!
    TextComponent foot_globreal
      text = Drücke Sie die <Leertaste> um mit dem Experiment zu beginnen!
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      letterHeight = 0.04
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    KeyboardComponent key_read9
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine locinstr
    TextComponent head_locinstr
      wrapWidth = 1.5
      text = Form der lokalen Buchstaben (Elemente)
      pos = (0, 0.85)
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.1
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    TextComponent main_locinstr
      wrapWidth = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.060
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      text [set every frame]:
        Bitte reagieren Sie in der folgenden Aufgabe auf die Form der lokalen Buchstaben, also der Buchstaben, welche die Elemente des größeren Buchstaben bilden. Diese Elementarbausteine können entweder "H" oder "S" sein. Bitte drücken Sie so schnell es geht die entsprechende Taste auf der Tastatur (H oder S).

        Beispiel:






        linkes Beispiel: H drücken                             rechtes Beispiel: H drücken

        Die Stimuli werden nur für eine kurze Zeit präsentiert. Bitte versuchen Sie so schnell es geht zu antworten, jedoch möglichst wenig Fehler zu machen.

        Es folgt nun eine kurze Übung!
    TextComponent foot_locinstr
      text = Weiter mit der <Leertaste>!
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      letterHeight = 0.04
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    KeyboardComponent key_read2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent H
      pos = (-0.4, 0)
      startVal [time (s)] = 0.0
      image = Grafiken/HH.png
      size = (0.194, 0.300)
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    ImageComponent S
      pos = (0.4,0)
      startVal [time (s)] = 0.0
      image = Grafiken/SH.png
      size = (0.194, 0.300)
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  Routine feedbackL_train
    CodeComponent feedback_L_2
      Begin Experiment:
        msg='doh!'#if this comes up we forgot to update the msg!
      Begin Routine:
        nCorr = practice_local.data['KeyL.corr'].sum() #.std(), .mean() also available
        meanRt = practice_local.data['KeyL.rt'].mean()
        msg = "Sie haben %i Stimuli richtig beantwortet \n (Reaktionszeit=%.2f s)" %(nCorr,meanRt)
    TextComponent head_feedbackL_2
      text = Übung beendet!
      pos = (0, 0.85)
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.1
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    TextComponent main_feedbackL_2
      text [set every repeat] = $msg
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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    TextComponent foot_feedbackL_2
      text = Weiter mit der <Leertaste>!
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      letterHeight = 0.04
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    KeyboardComponent key_read4_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine geninstr
  Routine geninstr_2
  LoopInitiator Block_select loopType="TrialHandler"
    isTrials = False
    loopType = fullRandom
    nReps = 1
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    LoopInitiator local_Block loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 1
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      Routine locinstr
      LoopInitiator practice_local loopType="TrialHandler"
        conditionsFile = conditions_training_local_Navon.csv
        loopType = random
        nReps = 1
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        conditions:
          [{'GL_fileName': u'/home/pablo/Escritorio/Navon/Grafiken/SS.png', 'congruent': 1, 'corrAns': u's', 'position_x': 0.6, 'position_y': 0.375, 'position': u'(0.6 , 0.375)', 'condition': u'gSlS'},
          {'GL_fileName': u'/home/pablo/Escritorio/Navon/Grafiken/SH.png', 'congruent': 0, 'corrAns': u'h', 'position_x': -0.6, 'position_y': 0.375, 'position': u'(-0.6 , 0.375)', 'condition': u'gSlH'},
          {'GL_fileName': u'/home/pablo/Escritorio/Navon/Grafiken/HH.png', 'congruent': 1, 'corrAns': u'h', 'position_x': 0.6, 'position_y': -0.375, 'position': u'(0.6 , -0.375)', 'condition': u'gHlH'},
          {'GL_fileName': u'/home/pablo/Escritorio/Navon/Grafiken/HS.png', 'congruent': 0, 'corrAns': u's', 'position_x': -0.6, 'position_y': -0.375, 'position': u'(-0.6 , -0.375)', 'condition': u'gHlS'}]
        Routine Trials_L
      LoopTerminator practice_local
      Routine feedbackL_train
      Routine instr_realL
      LoopInitiator exp_local_1 loopType="TrialHandler"
        conditionsFile = conditions_local_Navon_Part1.csv
        loopType = random
        nReps = 1
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        conditions:
          [{'GL_fileName': u'Grafiken/SS.png', 'congruent': 1, 'corrAns': u's', 'position_x': 0.6, 'position_y': 0.375, 'position': [2.4, 2.4], 'condition': u'gSlS'},
          {'GL_fileName': u'Grafiken/SS.png', 'congruent': 0, 'corrAns': u's', 'position_x': -0.6, 'position_y': 0.375, 'position': [-2.4, 2.4], 'condition': u'gSlS'},
          {'GL_fileName': u'Grafiken/SS.png', 'congruent': 1, 'corrAns': u's', 'position_x': 0.6, 'position_y': -0.375, 'position': [2.4, -2.4], 'condition': u'gSlS'},
          {'GL_fileName': u'Grafiken/SS.png', 'congruent': 0, 'corrAns': u's', 'position_x': -0.6, 'position_y': -0.375, 'position': [-2.4, -2.4], 'condition': u'gSlS'},
          {'GL_fileName': u'Grafiken/SH.png', 'congruent': 1, 'corrAns': u'h', 'position_x': 0.6, 'position_y': 0.375, 'position': [2.4, 2.4], 'condition': u'gSlH'},
          {'GL_fileName': u'Grafiken/SH.png', 'congruent': 0, 'corrAns': u'h', 'position_x': -0.6, 'position_y': 0.375, 'position': [-2.4, 2.4], 'condition': u'gSlH'},
          {'GL_fileName': u'Grafiken/SH.png', 'congruent': 1, 'corrAns': u'h', 'position_x': 0.6, 'position_y': -0.375, 'position': [2.4, -2.4], 'condition': u'gSlH'},
          {'GL_fileName': u'Grafiken/SH.png', 'congruent': 0, 'corrAns': u'h', 'position_x': -0.6, 'position_y': -0.375, 'position': [-2.4, -2.4], 'condition': u'gSlH'},
          {'GL_fileName': u'Grafiken/HH.png', 'congruent': 1, 'corrAns': u'h', 'position_x': 0.6, 'position_y': 0.375, 'position': [2.4, 2.4], 'condition': u'gHlH'}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
        Routine Trials_L
      LoopTerminator exp_local_1
      Routine pause_L
      LoopInitiator exp_local_2 loopType="TrialHandler"
        conditionsFile = conditions_local_Navon_Part2.csv
        loopType = random
        nReps = 1
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        conditions:
          [{'GL_fileName': u'Grafiken/SS.png', 'congruent': 1, 'corrAns': u's', 'position_x': 0.6, 'position_y': 0.375, 'position': [2.4, 2.4], 'condition': u'gSlS'},
          {'GL_fileName': u'Grafiken/SS.png', 'congruent': 0, 'corrAns': u's', 'position_x': -0.6, 'position_y': 0.375, 'position': [-2.4, 2.4], 'condition': u'gSlS'},
          {'GL_fileName': u'Grafiken/SS.png', 'congruent': 1, 'corrAns': u's', 'position_x': 0.6, 'position_y': -0.375, 'position': [2.4, -2.4], 'condition': u'gSlS'},
          {'GL_fileName': u'Grafiken/SS.png', 'congruent': 0, 'corrAns': u's', 'position_x': -0.6, 'position_y': -0.375, 'position': [-2.4, -2.4], 'condition': u'gSlS'},
          {'GL_fileName': u'Grafiken/SH.png', 'congruent': 1, 'corrAns': u'h', 'position_x': 0.6, 'position_y': 0.375, 'position': [2.4, 2.4], 'condition': u'gSlH'},
          {'GL_fileName': u'Grafiken/SH.png', 'congruent': 0, 'corrAns': u'h', 'position_x': -0.6, 'position_y': 0.375, 'position': [-2.4, 2.4], 'condition': u'gSlH'},
          {'GL_fileName': u'Grafiken/SH.png', 'congruent': 1, 'corrAns': u'h', 'position_x': 0.6, 'position_y': -0.375, 'position': [2.4, -2.4], 'condition': u'gSlH'},
          {'GL_fileName': u'Grafiken/SH.png', 'congruent': 0, 'corrAns': u'h', 'position_x': -0.6, 'position_y': -0.375, 'position': [-2.4, -2.4], 'condition': u'gSlH'},
          {'GL_fileName': u'Grafiken/HH.png', 'congruent': 1, 'corrAns': u'h', 'position_x': 0.6, 'position_y': 0.375, 'position': [2.4, 2.4], 'condition': u'gHlH'}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
        Routine Trials_L
      LoopTerminator exp_local_2
    LoopTerminator local_Block
    LoopInitiator global_block loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 1
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      Routine globinstr
      LoopInitiator practice_global loopType="TrialHandler"
        conditionsFile = conditions_training_global_Navon.csv
        loopType = random
        nReps = 1
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        conditions:
          [{'GL_fileName': u'/home/pablo/Escritorio/Navon/Grafiken/SS.png', 'congruent': 1, 'corrAns': u's', 'position_x': 0.6, 'position_y': 0.375, 'position': u'(0.6 , 0.375)', 'condition': u'gSlS'},
          {'GL_fileName': u'/home/pablo/Escritorio/Navon/Grafiken/SH.png', 'congruent': 0, 'corrAns': u'h', 'position_x': -0.6, 'position_y': 0.375, 'position': u'(-0.6 , 0.375)', 'condition': u'gSlH'},
          {'GL_fileName': u'/home/pablo/Escritorio/Navon/Grafiken/HH.png', 'congruent': 1, 'corrAns': u'h', 'position_x': 0.6, 'position_y': -0.375, 'position': u'(0.6 , -0.375)', 'condition': u'gHlH'},
          {'GL_fileName': u'/home/pablo/Escritorio/Navon/Grafiken/HS.png', 'congruent': 0, 'corrAns': u's', 'position_x': -0.6, 'position_y': -0.375, 'position': u'(-0.6 , -0.375)', 'condition': u'gHlS'}]
        Routine Trials_G
      LoopTerminator practice_global
      Routine feedbackG_train
      Routine instr_realG
      LoopInitiator exp_global_1 loopType="TrialHandler"
        conditionsFile = conditions_global_Navon.csv
        loopType = random
        nReps = 1
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        conditions:
          [{'GL_fileName': u'Grafiken/SS.png', 'congruent': 1, 'corrAns': u's', 'position_x': 0.6, 'position_y': 0.375, 'position': u'(0.6 , 0.375)', 'condition': u'gSlS'},
          {'GL_fileName': u'Grafiken/SS.png', 'congruent': 0, 'corrAns': u'h', 'position_x': -0.6, 'position_y': 0.375, 'position': u'(-0.6 , 0.375)', 'condition': u'gSlS'},
          {'GL_fileName': u'Grafiken/SS.png', 'congruent': 1, 'corrAns': u'h', 'position_x': 0.6, 'position_y': -0.375, 'position': u'(0.6 , -0.375)', 'condition': u'gSlS'},
          {'GL_fileName': u'Grafiken/SS.png', 'congruent': 0, 'corrAns': u's', 'position_x': -0.6, 'position_y': -0.375, 'position': u'(-0.6 , -0.375)', 'condition': u'gSlS'},
          {'GL_fileName': u'Grafiken/SH.png', 'congruent': 1, 'corrAns': u's', 'position_x': 0.6, 'position_y': 0.375, 'position': u'(0.6 , 0.375)', 'condition': u'gSlH'},
          {'GL_fileName': u'Grafiken/SH.png', 'congruent': 0, 'corrAns': u'h', 'position_x': -0.6, 'position_y': 0.375, 'position': u'(-0.6 , 0.375)', 'condition': u'gSlH'},
          {'GL_fileName': u'Grafiken/SH.png', 'congruent': 1, 'corrAns': u'h', 'position_x': 0.6, 'position_y': -0.375, 'position': u'(0.6 , -0.375)', 'condition': u'gSlH'},
          {'GL_fileName': u'Grafiken/SH.png', 'congruent': 0, 'corrAns': u's', 'position_x': -0.6, 'position_y': -0.375, 'position': u'(-0.6 , -0.375)', 'condition': u'gSlH'},
          {'GL_fileName': u'Grafiken/HH.png', 'congruent': 1, 'corrAns': u's', 'position_x': 0.6, 'position_y': 0.375, 'position': u'(0.6 , 0.375)', 'condition': u'gHlH'}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
        Routine Trials_G
      LoopTerminator exp_global_1
      Routine pause_G
      LoopInitiator exp_global_2 loopType="TrialHandler"
        conditionsFile = conditions_global_Navon_Part2.csv
        loopType = random
        nReps = 1
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        conditions:
          [{'GL_fileName': u'Grafiken/SS.png', 'congruent': 1, 'corrAns': u's', 'position_x': 0.6, 'position_y': 0.375, 'position': [2.4, 2.4], 'condition': u'gSlS'},
          {'GL_fileName': u'Grafiken/SS.png', 'congruent': 0, 'corrAns': u's', 'position_x': -0.6, 'position_y': 0.375, 'position': [-2.4, 2.4], 'condition': u'gSlS'},
          {'GL_fileName': u'Grafiken/SS.png', 'congruent': 1, 'corrAns': u's', 'position_x': 0.6, 'position_y': -0.375, 'position': [2.4, -2.4], 'condition': u'gSlS'},
          {'GL_fileName': u'Grafiken/SS.png', 'congruent': 0, 'corrAns': u's', 'position_x': -0.6, 'position_y': -0.375, 'position': [-2.4, -2.4], 'condition': u'gSlS'},
          {'GL_fileName': u'Grafiken/SH.png', 'congruent': 1, 'corrAns': u's', 'position_x': 0.6, 'position_y': 0.375, 'position': [2.4, 2.4], 'condition': u'gSlH'},
          {'GL_fileName': u'Grafiken/SH.png', 'congruent': 0, 'corrAns': u's', 'position_x': -0.6, 'position_y': 0.375, 'position': [-2.4, 2.4], 'condition': u'gSlH'},
          {'GL_fileName': u'Grafiken/SH.png', 'congruent': 1, 'corrAns': u's', 'position_x': 0.6, 'position_y': -0.375, 'position': [2.4, -2.4], 'condition': u'gSlH'},
          {'GL_fileName': u'Grafiken/SH.png', 'congruent': 0, 'corrAns': u's', 'position_x': -0.6, 'position_y': -0.375, 'position': [-2.4, -2.4], 'condition': u'gSlH'},
          {'GL_fileName': u'Grafiken/HH.png', 'congruent': 1, 'corrAns': u'h', 'position_x': 0.6, 'position_y': 0.375, 'position': [2.4, 2.4], 'condition': u'gHlH'}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
        Routine Trials_G
      LoopTerminator exp_global_2
    LoopTerminator global_block
  LoopTerminator Block_select
  Routine end_question
  Routine question1
  Routine question2
  Routine question3
  Routine question4
  Routine feedback_final
  Routine feedback_final2
  Routine Thank_you
